PsychoPy2experiment version="2022.2.3"
Settings
  Data filename = 'data_raw/%s_%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': 'P0'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  color = 1.0000, 1.0000, 1.0000
  expName = CFMT_Inverted
  keyboardBackend = ioHub
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Routines
  Routine Instructions_Practice
    TextComponent text_2
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Practice

        Memorize the face in the next three images.

        A test will follow.

        []
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions_Task
    TextComponent text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This activity will be the same as the first activity.

        You will see a face from three different directions, then you will be asked to identify that face from a line up.

        This time though, the faces will be upside-down.

        []
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Practice_C
    ImageComponent Practice_C_ans
      image = K23_task_images/Practice_Ans_C_Up.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent Response_C_
      allowedKeys = '1', '2', '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_part1
    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Great! Let's go on and do the actual test.

        In this test you will learn to recognize six people.

        []
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Memorize_part1
    ImageComponent mem_1
      flipVert = True
      image [set every repeat] = $Mem1
      saveStartStop = False
      size = (0.28, 0.308)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent mem_2
      flipVert = True
      image [set every repeat] = $Mem2
      saveStartStop = False
      size = (0.28, 0.308)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 3.0
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    ImageComponent mem_3
      flipVert = True
      image [set every repeat] = $Mem3
      saveStartStop = False
      size = (0.28, 0.308)
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = 3.0
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    TextComponent mem_title
      color = black
      letterHeight = 0.1
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
      text = Memorize
      units = norm
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  Routine Instructions_prompt_part1
    TextComponent text_4
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Try and memorize the following face.

        Ready?
  Routine Screen
    ImageComponent Image_screen
      flipVert = True
      image = 0.K23_task_images/CFMT/prac_mem_1.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent text_screen
      color = black
      letterHeight = 0.1
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Practice
      units = norm
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  Routine screen2
    TextComponent screen2_prompt
      color = black
      letterHeight = 0.07
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        What face did you see?

        There is only one correct answer.
    ImageComponent screen_image
      image = 0.K23_task_images/CFMT/prac_ans_1.jpeg
      size = (0.8, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent num_screen2
      image = 0.K23_task_images/CFMT/ans_num.png
      pos = (0, -0.5)
      size = (1.002, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_B
    ImageComponent Practice_B_3
      image = K23_task_images/Practice_Ans_B_Up.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent Response_B_2
      allowedKeys = '1', '2', '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_Memorize
    ImageComponent prac_mem_1
      flipVert = True
      image = CFMT/Practice/1.jpeg
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent prac_mem_2
      flipVert = True
      image = CFMT/Practice/2.jpeg
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 3.0
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    ImageComponent prac_mem_3
      flipVert = True
      image = CFMT/Practice/3.jpeg
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = 3.0
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    TextComponent prac_title
      color = black
      letterHeight = 0.1
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
      text = Practice
      units = norm
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  Routine Practice_Response
    TextComponent Practice_Prompt
      color = black
      letterHeight = 0.07
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        What face did you see?

        There is only one correct answer.
    ImageComponent Practice_Choices
      image [set every repeat] = $prac
      ori = 180
      saveStartStop = False
      size = (0.8, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent Numbers
      image = CFMT/ans_num.png
      pos = (0, -0.5)
      saveStartStop = False
      size = (1.046, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent Response
      allowedKeys [set every repeat] = '1', '2', '3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Test1
    TextComponent Answer_Prompt
      color = black
      letterHeight = 0.07
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        What face did you just see?
    ImageComponent Choices
      image [set every repeat] = $Test1
      ori = 180
      saveStartStop = False
      size = (0.8, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent Numbers_Test1
      image = CFMT/ans_num.png
      pos = (0, -0.5)
      saveStartStop = False
      size = (1.046, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent Answer
      allowedKeys = '1', '2', '3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent fnum_1
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.05
      pos = (0.8, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $facenum
      units = norm
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  Routine Test2
    TextComponent Answer_Prompt_2
      color = black
      letterHeight = 0.07
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        What face did you just see?
    ImageComponent Choices_2
      image [set every repeat] = $Test2
      ori = 180
      saveStartStop = False
      size = (0.8, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent Numbers_Test1_2
      image = CFMT/ans_num.png
      pos = (0, -0.5)
      saveStartStop = False
      size = (1.046, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent Answer_2
      allowedKeys [set every repeat] = '1', '2', '3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent fnum_2
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.05
      pos = (0.8, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $facenum
      units = norm
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  Routine Test3
    TextComponent Answer_Prompt_3
      color = black
      letterHeight = 0.07
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        What face did you just see?
    ImageComponent Choices_3
      image [set every repeat] = $Test3
      ori = 180
      saveStartStop = False
      size = (0.8, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent Numbers_Test3
      image = CFMT/ans_num.png
      pos = (0, -0.5)
      saveStartStop = False
      size = (1.046, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent Answer_3
      allowedKeys [set every repeat] = '1', '2', '3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent fnum_3
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.05
      pos = (0.8, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $facenum
      units = norm
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  Routine Instructions_part2
  Routine Part2_novel
    TextComponent Answer_Prompt_4
      color = black
      letterHeight = 0.07
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text [set every repeat]:
        Which face is one of the six target faces?
    ImageComponent Choices_4
      image [set every repeat] = $novel
      ori = 180
      saveStartStop = False
      size = (0.8, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent Numbers_Test3_2
      image [set every repeat] = CFMT/ans_num.png
      pos = (0, -0.5)
      saveStartStop = False
      size = (1.046, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent Answer_4
      allowedKeys [set every repeat] = '1', '2', '3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent novnum
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.05
      pos = (0.8, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $nov_num
      units = norm
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  Routine instructions_part2_noise
    TextComponent text_7
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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      text:
        Now you will review the same 6 people for 20 seconds.

        Then your memory of those faces will be tested.
    ImageComponent image
      flipVert = True
      image = CFMT/Test/array.jpeg
      size = (0.9, 0.9)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 20.0
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  Routine Part2_noise
    TextComponent Answer_Prompt_5
      color = black
      letterHeight = 0.07
      pos = (0, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Which face is one of the six target faces?
    ImageComponent Choices_5
      image [set every repeat] = $noise
      ori = 180
      saveStartStop = False
      size = (0.8, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent Numbers_Test3_3
      image = CFMT/ans_num.png
      pos = (0, -0.5)
      saveStartStop = False
      size = (1.046, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent Answer_5
      allowedKeys [set every repeat] = '1', '2', '3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent noisnum
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.05
      pos = (0.8, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $nois_num
      units = norm
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  Routine End
    TextComponent text_8
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Great Work!

        How did you feel about the difficulty between the upside-down and right-side up version?

        Was one harder or were they the same?

        1.Upright 2.Inverted 3.Same
    KeyboardComponent key_resp_6
      allowedKeys = '1', '2', '3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Instructions_test
    TextComponent text_5
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Now you will review the same 6 people for 20 seconds.
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    ImageComponent array_1
      flipVert = True
      image = CFMT/Test/array.jpeg
      saveStartStop = False
      size = (0.9, 0.9)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 20.0
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 24.0
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      text:
        Now your memory of those face will be tested.

        In the remaining trials, the correct answer can be any of the six faces.

        The incorrect faces are sometimes very similar to the target faces, so be sure to look at each face prior to answering.

        []
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 24.0
      store = nothing
      syncScreenRefresh = False
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Flow
  Routine Instructions_Task
  Routine Instructions_Practice
  Routine Practice_Memorize
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = CFMT/Practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'prac': '/Users/gillianmiller/Documents/0.K23_tasks/CFMT/Practice/A.jpeg'},
      {'prac': '/Users/gillianmiller/Documents/0.K23_tasks/CFMT/Practice/B.jpeg'},
      {'prac': '/Users/gillianmiller/Documents/0.K23_tasks/CFMT/Practice/C.jpeg'}]
    Routine Practice_Response
  LoopTerminator trials
  Routine Instructions_part1
  LoopInitiator Part1_Learn loopType="TrialHandler"
    conditionsFile = CFMT/Learn.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Face': 'Face 1', 'Mem1': 'CFMT/Learn/mem_1.jpeg', 'Mem2': 'CFMT/Learn/mem_2.jpeg', 'Mem3': 'CFMT/Learn/mem_3.jpeg', 'Test1': 'CFMT/Learn/test_1.jpeg', 'Test2': 'CFMT/Learn/test_2.jpeg', 'Test3': 'CFMT/Learn/test_3.jpeg', 'facenum': 1},
      {'Face': 'Face 2', 'Mem1': 'CFMT/Learn/mem_4.jpeg', 'Mem2': 'CFMT/Learn/mem_5.jpeg', 'Mem3': 'CFMT/Learn/mem_6.jpeg', 'Test1': 'CFMT/Learn/test_4.jpeg', 'Test2': 'CFMT/Learn/test_5.jpeg', 'Test3': 'CFMT/Learn/test_6.jpeg', 'facenum': 2},
      {'Face': 'Face 3', 'Mem1': 'CFMT/Learn/mem_7.jpeg', 'Mem2': 'CFMT/Learn/mem_8.jpeg', 'Mem3': 'CFMT/Learn/mem_9.jpeg', 'Test1': 'CFMT/Learn/test_7.jpeg', 'Test2': 'CFMT/Learn/test_8.jpeg', 'Test3': 'CFMT/Learn/test_9.jpeg', 'facenum': 3},
      {'Face': 'Face 4', 'Mem1': 'CFMT/Learn/mem_10.jpeg', 'Mem2': 'CFMT/Learn/mem_11.jpeg', 'Mem3': 'CFMT/Learn/mem_12.jpeg', 'Test1': 'CFMT/Learn/test_10.jpeg', 'Test2': 'CFMT/Learn/test_11.jpeg', 'Test3': 'CFMT/Learn/test_12.jpeg', 'facenum': 4},
      {'Face': 'Face 5', 'Mem1': 'CFMT/Learn/mem_13.jpeg', 'Mem2': 'CFMT/Learn/mem_14.jpeg', 'Mem3': 'CFMT/Learn/mem_15.jpeg', 'Test1': 'CFMT/Learn/test_13.jpeg', 'Test2': 'CFMT/Learn/test_14.jpeg', 'Test3': 'CFMT/Learn/test_15.jpeg', 'facenum': 5},
      {'Face': 'Face 6 ', 'Mem1': 'CFMT/Learn/mem_16.jpeg', 'Mem2': 'CFMT/Learn/mem_17.jpeg', 'Mem3': 'CFMT/Learn/mem_18.jpeg', 'Test1': 'CFMT/Learn/test_16.jpeg', 'Test2': 'CFMT/Learn/test_17.jpeg', 'Test3': 'CFMT/Learn/test_18.jpeg', 'facenum': 6}]
    Routine Instructions_prompt_part1
    Routine Memorize_part1
    Routine Test1
    Routine Test2
    Routine Test3
  LoopTerminator Part1_Learn
  Routine Instructions_test
  LoopInitiator novel_test loopType="TrialHandler"
    conditionsFile = CFMT/Test_novel.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'novel': 'CFMT/Test/novel_1.jpeg', 'nov_num': 1},
      {'novel': 'CFMT/Test/novel_2.jpeg', 'nov_num': 2},
      {'novel': 'CFMT/Test/novel_3.jpeg', 'nov_num': 3},
      {'novel': 'CFMT/Test/novel_4.jpeg', 'nov_num': 4},
      {'novel': 'CFMT/Test/novel_5.jpeg', 'nov_num': 5},
      {'novel': 'CFMT/Test/novel_6.jpeg', 'nov_num': 6},
      {'novel': 'CFMT/Test/novel_7.jpeg', 'nov_num': 7},
      {'novel': 'CFMT/Test/novel_8.jpeg', 'nov_num': 8},
      {'novel': 'CFMT/Test/novel_9.jpeg', 'nov_num': 9},
      {'novel': 'CFMT/Test/novel_10.jpeg', 'nov_num': 10},
      {'novel': 'CFMT/Test/novel_11.jpeg', 'nov_num': 11},
      {'novel': 'CFMT/Test/novel_12.jpeg', 'nov_num': 12},
      {'novel': 'CFMT/Test/novel_13.jpeg', 'nov_num': 13},
      {'novel': 'CFMT/Test/novel_14.jpeg', 'nov_num': 14},
      {'novel': 'CFMT/Test/novel_15.jpeg', 'nov_num': 15},
      {'novel': 'CFMT/Test/novel_16.jpeg', 'nov_num': 16},
      {'novel': 'CFMT/Test/novel_17.jpeg', 'nov_num': 17},
      {'novel': 'CFMT/Test/novel_18.jpeg', 'nov_num': 18},
      {'novel': 'CFMT/Test/novel_19.jpeg', 'nov_num': 19},
      {'novel': 'CFMT/Test/novel_20.jpeg', 'nov_num': 20},
      {'novel': 'CFMT/Test/novel_21.jpeg', 'nov_num': 21},
      {'novel': 'CFMT/Test/novel_22.jpeg', 'nov_num': 22},
      {'novel': 'CFMT/Test/novel_23.jpeg', 'nov_num': 23},
      {'novel': 'CFMT/Test/novel_24.jpeg', 'nov_num': 24},
      {'novel': 'CFMT/Test/novel_25.jpeg', 'nov_num': 25},
      {'novel': 'CFMT/Test/novel_26.jpeg', 'nov_num': 26},
      {'novel': 'CFMT/Test/novel_27.jpeg', 'nov_num': 27},
      {'novel': 'CFMT/Test/novel_28.jpeg', 'nov_num': 28},
      {'novel': 'CFMT/Test/novel_29.jpeg', 'nov_num': 29}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
    Routine Part2_novel
  LoopTerminator novel_test
  Routine instructions_part2_noise
  LoopInitiator noise_test loopType="TrialHandler"
    conditionsFile = CFMT/Test_noise.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'noise': 'CFMT/Test/noise_1.jpeg', 'nois_num': 1},
      {'noise': 'CFMT/Test/noise_2.jpeg', 'nois_num': 2},
      {'noise': 'CFMT/Test/noise_3.jpeg', 'nois_num': 3},
      {'noise': 'CFMT/Test/noise_4.jpeg', 'nois_num': 4},
      {'noise': 'CFMT/Test/noise_5.jpeg', 'nois_num': 5},
      {'noise': 'CFMT/Test/noise_6.jpeg', 'nois_num': 6},
      {'noise': 'CFMT/Test/noise_7.jpeg', 'nois_num': 7},
      {'noise': 'CFMT/Test/noise_8.jpeg', 'nois_num': 8},
      {'noise': 'CFMT/Test/noise_9.jpeg', 'nois_num': 9},
      {'noise': 'CFMT/Test/noise_10.jpeg', 'nois_num': 10},
      {'noise': 'CFMT/Test/noise_11.jpeg', 'nois_num': 11},
      {'noise': 'CFMT/Test/noise_12.jpeg', 'nois_num': 12},
      {'noise': 'CFMT/Test/noise_13.jpeg', 'nois_num': 13},
      {'noise': 'CFMT/Test/noise_14.jpeg', 'nois_num': 14},
      {'noise': 'CFMT/Test/noise_15.jpeg', 'nois_num': 15},
      {'noise': 'CFMT/Test/noise_16.jpeg', 'nois_num': 16},
      {'noise': 'CFMT/Test/noise_17.jpeg', 'nois_num': 17},
      {'noise': 'CFMT/Test/noise_18.jpeg', 'nois_num': 18},
      {'noise': 'CFMT/Test/noise_19.jpeg', 'nois_num': 19},
      {'noise': 'CFMT/Test/noise_20.jpeg', 'nois_num': 20},
      {'noise': 'CFMT/Test/noise_21.jpeg', 'nois_num': 21},
      {'noise': 'CFMT/Test/noise_22.jpeg', 'nois_num': 22},
      {'noise': 'CFMT/Test/noise_23.jpeg', 'nois_num': 23},
      {'noise': 'CFMT/Test/noise_24.jpeg', 'nois_num': 24}]
    Routine Part2_noise
  LoopTerminator noise_test
  Routine End
