PsychoPy2experiment version="2022.2.3"
Settings
  Data filename = 'data_raw/%s_%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': 'P0'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  expName = RMIE
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $img
      saveStartStop = False
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent topleft_2
      color = black
      letterHeight = 0.07
      pos = (-0.4, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $topleft
      units = norm
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    TextComponent topright_2
      color = black
      letterHeight = 0.07
      pos = (0.4, 0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $topright
      units = norm
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    TextComponent bottomleft_2
      color = black
      letterHeight = 0.07
      pos = (-0.4, -0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $bottomleft
      units = norm
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    TextComponent bottomright_2
      color = black
      letterHeight = 0.07
      pos = (0.4, -0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $bottomright
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = '1', '2', '3', '4'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text_4
      color = 0.0039, 0.0039, 0.0039
      letterHeight = 0.05
      pos = (-0.9, 0.9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
      units = norm
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    TextComponent text_5
      color = 0.0039, 0.0039, 0.0039
      letterHeight = 0.05
      pos = (0.9, 0.9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
      units = norm
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    TextComponent text_6
      color = 0.0039, 0.0039, 0.0039
      letterHeight = 0.05
      pos = (-0.9, -0.9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
      units = norm
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    TextComponent text_7
      color = 0.0039, 0.0039, 0.0039
      letterHeight = 0.05
      pos = (0.9, -0.9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
      units = norm
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    TextComponent pagenumber
      color = 0.6549, 0.6549, 0.6549
      letterHeight = 0.05
      pos = (0,-0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $pnum
      units = norm
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  Routine testbutton
    ButtonComponent button
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.07
      save = last click
      saveStartStop = False
      startVal [time (s)] = 0
      text = playful
      timeRelativeTo = routine
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  Routine Instructions
    TextComponent text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this presentation, there are pictures of people’s eyes.

        For each set of eyes, choose which word best describes what the person in the picture is thinking or feeling.

        You may feel that more than one word is applicable but please choose just one word; the word which you consider to be most suitable.

        Before making your choice, make sure that you have read all 4 words.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine End
    TextComponent text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great Work!

        []
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions2
    TextComponent text_3
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You should try to do the task as quickly as possible but you will not be timed.

        If you really don't know what a word means I can look it up in the definition handout that I have on my screen.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine End_2
    TextComponent text_8
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Great Work!
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine Instructions2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = RMIE/RMIE_info.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'img': 'RMIE/A.png', 'topleft': 'jealous', 'topright': 'panicked', 'bottomleft': 'arrogant', 'bottomright': 'hateful', 'pnum': 0},
      {'img': 'RMIE/1.png', 'topleft': 'playful', 'topright': 'comforting', 'bottomleft': 'irritated', 'bottomright': 'bored', 'pnum': 1},
      {'img': 'RMIE/2.png', 'topleft': 'terrified', 'topright': 'upset', 'bottomleft': 'arrogant', 'bottomright': 'annoyed', 'pnum': 2},
      {'img': 'RMIE/3.png', 'topleft': 'joking', 'topright': 'flustered', 'bottomleft': 'desire', 'bottomright': 'convinced', 'pnum': 3},
      {'img': 'RMIE/4.png', 'topleft': 'joking', 'topright': 'insisting', 'bottomleft': 'amused', 'bottomright': 'relaxed', 'pnum': 4},
      {'img': 'RMIE/5.png', 'topleft': 'irritated', 'topright': 'sarcastic', 'bottomleft': 'worried', 'bottomright': 'friendly', 'pnum': 5},
      {'img': 'RMIE/6.png', 'topleft': 'aghast', 'topright': 'fantasizing', 'bottomleft': 'impatient', 'bottomright': 'alarmed', 'pnum': 6},
      {'img': 'RMIE/7.png', 'topleft': 'apologetic', 'topright': 'friendly', 'bottomleft': 'uneasy', 'bottomright': 'dispirited', 'pnum': 7},
      {'img': 'RMIE/8.png', 'topleft': 'despondent', 'topright': 'relieved', 'bottomleft': 'shy', 'bottomright': 'excited', 'pnum': 8},
      {'img': 'RMIE/9.png', 'topleft': 'annoyed', 'topright': 'hostile', 'bottomleft': 'horrified', 'bottomright': 'preoccupied', 'pnum': 9},
      {'img': 'RMIE/10.png', 'topleft': 'cautious', 'topright': 'insisting', 'bottomleft': 'bored', 'bottomright': 'aghast', 'pnum': 10}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
    Routine trial
  LoopTerminator trials
  Routine End
